<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.4.0-preview">
  <Workflow xmlns:q10="clr-namespace:Bonsai.Scripting;assembly=Bonsai.Scripting" xmlns:q8="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp" xmlns:q2="clr-namespace:Bonsai.Numerics;assembly=Bonsai.Numerics" xmlns:xsd="http://www.w3.org/2001/XMLSchema" xmlns:q9="clr-namespace:Bonsai.IO;assembly=Bonsai.System" xmlns:q3="clr-namespace:Bonsai.Numerics.Distributions;assembly=Bonsai.Numerics" xmlns:q7="clr-namespace:;assembly=Extensions" xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" xmlns:q5="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision" xmlns:q4="clr-namespace:Bonsai.Uvc;assembly=Bonsai.Uvc" xmlns:q6="clr-namespace:Bonsai.Shaders.Input;assembly=Bonsai.Shaders" xmlns:q1="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders" xmlns="https://horizongir.org/bonsai">
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:RenderFrame" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q2:CreateRandom">
          <q2:Seed xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="AsyncSubject">
        <Name>Random</Name>
      </Expression>
      <Expression xsi:type="PublishSubject">
        <Name>Draw</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q3:CreateContinuousUniform">
          <q3:Lower>-0.9</q3:Lower>
          <q3:Upper>0.9</q3:Upper>
        </Combinator>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q4:DeviceCapture">
          <q4:Index>2</q4:Index>
          <q4:Width>320</q4:Width>
          <q4:Height>240</q4:Height>
          <q4:ColorFormat>Color</q4:ColorFormat>
          <q4:AutoExposure>Manual</q4:AutoExposure>
          <q4:ExposureTime>129</q4:ExposureTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q4:DeviceCapture">
          <q4:Index>1</q4:Index>
          <q4:Width>400</q4:Width>
          <q4:Height>400</q4:Height>
          <q4:ColorFormat>Grayscale</q4:ColorFormat>
          <q4:AutoExposure xsi:nil="true" />
          <q4:ExposureTime xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Image</Selector>
      </Expression>
      <Expression xsi:type="PublishSubject">
        <Name>Pupil</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Zip" />
      </Expression>
      <Expression xsi:type="PublishSubject">
        <Name>World</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Image</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q5:Undistort">
          <q5:ImageSize xsi:nil="true" />
          <q5:Alpha>0</q5:Alpha>
          <q5:FocalLength>
            <q5:X>100</q5:X>
            <q5:Y>100</q5:Y>
          </q5:FocalLength>
          <q5:PrincipalPoint>
            <q5:X>160</q5:X>
            <q5:Y>120</q5:Y>
          </q5:PrincipalPoint>
          <q5:RadialDistortion>
            <q5:X>-0.075</q5:X>
            <q5:Y>0</q5:Y>
            <q5:Z>0</q5:Z>
          </q5:RadialDistortion>
          <q5:TangentialDistortion>
            <q5:X>0</q5:X>
            <q5:Y>0</q5:Y>
          </q5:TangentialDistortion>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q5:Threshold">
          <q5:ThresholdValue>0</q5:ThresholdValue>
          <q5:MaxValue>255</q5:MaxValue>
          <q5:ThresholdType>BinaryInv</q5:ThresholdType>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Repeat" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q6:KeyDown" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>0</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="ExternalizedProperty">
        <MemberName>ThresholdValue</MemberName>
        <Name />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>ViewMatrix</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q1:CreateOrthographic">
                <q1:Width>2.66666675</q1:Width>
                <q1:Height>2</q1:Height>
                <q1:NearClip>0</q1:NearClip>
                <q1:FarClip>100</q1:FarClip>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q1:AspectRatio" />
            </Expression>
            <Expression xsi:type="Multiply">
              <Operand xsi:type="FloatProperty">
                <Value>2</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="InputMapping">
              <PropertyMappings>
                <Property name="Width" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge>
              <From>0</From>
              <To>5</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>1</From>
              <To>2</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>2</From>
              <To>3</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>3</From>
              <To>0</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>4</From>
              <To>1</To>
              <Label>Source1</Label>
            </Edge>
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Defer">
        <Name>StartScreen</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>Draw</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="TakeUntil" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="ExternalizedProperty">
              <MemberName>TextureName</MemberName>
              <Name>TextureName</Name>
            </Expression>
            <Expression xsi:type="ExternalizedProperty">
              <MemberName>SizeX</MemberName>
              <Name />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q6:MouseDown" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="LastOrDefault" />
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\DrawSprite">
              <TextureName>Start</TextureName>
              <LocationX>0</LocationX>
              <LocationY>0</LocationY>
              <SizeX>1.33333337</SizeX>
              <SizeY>1</SizeY>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>FullWidth</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="q1:UpdateFrame" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="q1:AspectRatio" />
                  </Expression>
                  <Expression xsi:type="Multiply">
                    <Operand xsi:type="FloatProperty">
                      <Value>1</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge>
                    <From>0</From>
                    <To>1</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>1</From>
                    <To>2</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>2</From>
                    <To>3</To>
                    <Label>Source1</Label>
                  </Edge>
                </Edges>
              </Workflow>
            </Expression>
          </Nodes>
          <Edges>
            <Edge>
              <From>0</From>
              <To>7</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>1</From>
              <To>6</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>3</From>
              <To>7</To>
              <Label>Source2</Label>
            </Edge>
            <Edge>
              <From>4</From>
              <To>7</To>
              <Label>Source3</Label>
            </Edge>
            <Edge>
              <From>5</From>
              <To>1</To>
              <Label>Source2</Label>
            </Edge>
            <Edge>
              <From>6</From>
              <To>2</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>7</From>
              <To>1</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>8</From>
              <To>4</To>
              <Label>Source1</Label>
            </Edge>
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="SelectMany">
        <Name>GazeCalibration</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q7:ModelUpdate" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="ToArray" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Repeat" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Take">
                <Count>10</Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>World</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q5:Sobel">
                <q5:XOrder>1</q5:XOrder>
                <q5:YOrder>1</q5:YOrder>
                <q5:ApertureSize>7</q5:ApertureSize>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q8:Extrema" />
            </Expression>
            <Expression xsi:type="PublishSubject">
              <Name>CalibrationTarget</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q5:Grayscale" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q5:FileCapture">
                <q5:FileName>Movies\video.avi</q5:FileName>
                <q5:PlaybackRate>10000</q5:PlaybackRate>
                <q5:StartPosition>0</q5:StartPosition>
                <q5:PositionUnits>Frames</q5:PositionUnits>
                <q5:Loop>false</q5:Loop>
                <q5:Playing>true</q5:Playing>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedProperty">
              <MemberName>FileName</MemberName>
              <Name />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="ToArray" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Zip" />
            </Expression>
            <Expression xsi:type="ExternalizedProperty">
              <MemberName>Count</MemberName>
              <Name>Count</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q9:GetFiles">
                <q9:Path>Movies</q9:Path>
                <q9:SearchPattern>*.avi</q9:SearchPattern>
                <q9:SearchOption>TopDirectoryOnly</q9:SearchOption>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Random</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>RandomSource</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Zip" />
            </Expression>
            <Expression xsi:type="q10:ExpressionTransform">
              <q10:Expression>Item1[Item2.Next(Item1.Length)]</q10:Expression>
            </Expression>
            <Expression xsi:type="q9:CsvWriter">
              <q9:Delimiter>,</q9:Delimiter>
              <q9:Append>false</q9:Append>
              <q9:Overwrite>false</q9:Overwrite>
              <q9:Suffix>None</q9:Suffix>
              <q9:IncludeHeader>true</q9:IncludeHeader>
            </Expression>
            <Expression xsi:type="Unit" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Timestamp" />
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}-{1:d2}-{2:d2}T{3:d2}_{4:d2}_{5:d2}</Format>
              <Selector>Timestamp.DateTime.Year,Timestamp.DateTime.Month,Timestamp.DateTime.Day,Timestamp.DateTime.Hour,Timestamp.DateTime.Minute,Timestamp.DateTime.Second</Selector>
            </Expression>
            <Expression xsi:type="ExternalizedProperty">
              <MemberName>FileName</MemberName>
              <Name />
            </Expression>
            <Expression xsi:type="AsyncSubject">
              <Name>FileName</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>FileName</Name>
            </Expression>
            <Expression xsi:type="Format">
              <Format>Data\{0}\{0}-calibration.csv</Format>
            </Expression>
            <Expression xsi:type="q10:ExpressionTransform">
              <q10:Expression>new(
Item1 as Target,
Item2 as Pupil)</q10:Expression>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Target,Pupil</Selector>
            </Expression>
            <Expression xsi:type="q10:ExpressionTransform">
              <q10:Expression>new(
Item1 as FileName,
Item2 as Model,
Item3 as Frames)</q10:Expression>
            </Expression>
            <Expression xsi:type="Defer">
              <Name>CalibrationTrial</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Random</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Draw</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="Take">
                      <Count>60</Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="ExternalizedProperty">
                    <MemberName>LocationX</MemberName>
                    <Name />
                  </Expression>
                  <Expression xsi:type="ExternalizedProperty">
                    <MemberName>LocationY</MemberName>
                    <Name />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="q3:Sample" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="q3:Sample" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="DelaySubscription">
                      <DueTime>PT1S</DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>CalibrationTarget</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Pupil</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="ToArray" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="TakeUntil" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="Last" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="q7:AverageCorrespondence" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item1</Selector>
                  </Expression>
                  <Expression xsi:type="ExternalizedProperty">
                    <MemberName>Value</MemberName>
                    <Name>Threshold</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item1,Item2.Centroid</Selector>
                  </Expression>
                  <Expression xsi:type="PublishSubject">
                    <Name>MarkerFound</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="FloatProperty">
                      <Value>0</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="q1:UpdateUniform">
                      <q1:UniformName>bias</q1:UniformName>
                      <q1:ShaderName>Target</q1:ShaderName>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>MarkerFound</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="FloatProperty">
                      <Value>1</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="q1:UpdateUniform">
                      <q1:UniformName>bias</q1:UniformName>
                      <q1:ShaderName>Target</q1:ShaderName>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="DelaySubscription">
                      <DueTime>PT0.5S</DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\DrawTarget">
                    <LocationX>-0.0979545638</LocationX>
                    <LocationY>-0.220691085</LocationY>
                    <SizeX>0.1</SizeX>
                    <SizeY>0.1</SizeY>
                    <Angle>0</Angle>
                  </Expression>
                  <Expression xsi:type="SkipWhile">
                    <Name>SkipWhileMarkerNotFound</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                        <Expression xsi:type="MemberSelector">
                          <Selector>Item1.MaxValue</Selector>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="q8:Difference">
                            <q8:Order>1</q8:Order>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="LessThan">
                          <Operand xsi:type="DoubleProperty">
                            <Value>5000</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="ExternalizedProperty">
                          <MemberName>Value</MemberName>
                          <Name>Value</Name>
                        </Expression>
                      </Nodes>
                      <Edges>
                        <Edge>
                          <From>0</From>
                          <To>2</To>
                          <Label>Source1</Label>
                        </Edge>
                        <Edge>
                          <From>2</From>
                          <To>3</To>
                          <Label>Source1</Label>
                        </Edge>
                        <Edge>
                          <From>3</From>
                          <To>4</To>
                          <Label>Source1</Label>
                        </Edge>
                        <Edge>
                          <From>4</From>
                          <To>1</To>
                          <Label>Source1</Label>
                        </Edge>
                        <Edge>
                          <From>5</From>
                          <To>4</To>
                          <Label>Source2</Label>
                        </Edge>
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Condition">
                    <Name>NonEmpty</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                        <Expression xsi:type="MemberSelector">
                          <Selector>Length</Selector>
                        </Expression>
                        <Expression xsi:type="GreaterThan">
                          <Operand xsi:type="IntProperty">
                            <Value>0</Value>
                          </Operand>
                        </Expression>
                      </Nodes>
                      <Edges>
                        <Edge>
                          <From>0</From>
                          <To>2</To>
                          <Label>Source1</Label>
                        </Edge>
                        <Edge>
                          <From>2</From>
                          <To>3</To>
                          <Label>Source1</Label>
                        </Edge>
                        <Edge>
                          <From>3</From>
                          <To>1</To>
                          <Label>Source1</Label>
                        </Edge>
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Condition">
                    <Name>ValidPupil</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                        <Expression xsi:type="MemberSelector">
                          <Selector>Item2.Area</Selector>
                        </Expression>
                        <Expression xsi:type="GreaterThan">
                          <Operand xsi:type="DoubleProperty">
                            <Value>0</Value>
                          </Operand>
                        </Expression>
                      </Nodes>
                      <Edges>
                        <Edge>
                          <From>0</From>
                          <To>2</To>
                          <Label>Source1</Label>
                        </Edge>
                        <Edge>
                          <From>2</From>
                          <To>3</To>
                          <Label>Source1</Label>
                        </Edge>
                        <Edge>
                          <From>3</From>
                          <To>1</To>
                          <Label>Source1</Label>
                        </Edge>
                      </Edges>
                    </Workflow>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge>
                    <From>0</From>
                    <To>5</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>0</From>
                    <To>6</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>1</From>
                    <To>26</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>2</From>
                    <To>14</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>3</From>
                    <To>26</To>
                    <Label>Source2</Label>
                  </Edge>
                  <Edge>
                    <From>4</From>
                    <To>26</To>
                    <Label>Source3</Label>
                  </Edge>
                  <Edge>
                    <From>5</From>
                    <To>3</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>6</From>
                    <To>4</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>7</From>
                    <To>13</To>
                    <Label>Source2</Label>
                  </Edge>
                  <Edge>
                    <From>8</From>
                    <To>10</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>9</From>
                    <To>16</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>10</From>
                    <To>27</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>11</From>
                    <To>28</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>13</From>
                    <To>11</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>14</From>
                    <To>7</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>15</From>
                    <To>12</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>16</From>
                    <To>10</To>
                    <Label>Source2</Label>
                  </Edge>
                  <Edge>
                    <From>17</From>
                    <To>27</To>
                    <Label>Source2</Label>
                  </Edge>
                  <Edge>
                    <From>18</From>
                    <To>13</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>19</From>
                    <To>18</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>20</From>
                    <To>25</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>22</From>
                    <To>23</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>23</From>
                    <To>24</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>25</From>
                    <To>21</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>26</From>
                    <To>2</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>27</From>
                    <To>29</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>28</From>
                    <To>15</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>29</From>
                    <To>19</To>
                    <Label>Source1</Label>
                  </Edge>
                </Edges>
              </Workflow>
            </Expression>
          </Nodes>
          <Edges>
            <Edge>
              <From>1</From>
              <To>13</To>
              <Label>Source2</Label>
            </Edge>
            <Edge>
              <From>2</From>
              <To>1</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>3</From>
              <To>4</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>4</From>
              <To>28</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>5</From>
              <To>9</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>6</From>
              <To>7</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>7</From>
              <To>8</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>9</From>
              <To>6</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>10</From>
              <To>12</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>11</From>
              <To>10</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>12</From>
              <To>13</To>
              <Label>Source3</Label>
            </Edge>
            <Edge>
              <From>13</From>
              <To>30</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>14</From>
              <To>4</To>
              <Label>Source2</Label>
            </Edge>
            <Edge>
              <From>15</From>
              <To>18</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>16</From>
              <To>17</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>17</From>
              <To>18</To>
              <Label>Source2</Label>
            </Edge>
            <Edge>
              <From>18</From>
              <To>19</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>19</From>
              <To>11</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>20</From>
              <To>29</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>21</From>
              <To>22</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>22</From>
              <To>23</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>23</From>
              <To>25</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>24</From>
              <To>20</To>
              <Label>Source2</Label>
            </Edge>
            <Edge>
              <From>25</From>
              <To>13</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>26</From>
              <To>27</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>27</From>
              <To>24</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>28</From>
              <To>20</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>29</From>
              <To>2</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>30</From>
              <To>0</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>31</From>
              <To>3</To>
              <Label>Source1</Label>
            </Edge>
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>PupilTracking</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q5:FindContours">
                <q5:Mode>External</q5:Mode>
                <q5:Method>ChainApproxNone</q5:Method>
                <q5:Offset>
                  <q5:X>0</q5:X>
                  <q5:Y>0</q5:Y>
                </q5:Offset>
                <q5:MinArea>50</q5:MinArea>
                <q5:MaxArea xsi:nil="true" />
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q5:BinaryRegionAnalysis" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q5:LargestBinaryRegion" />
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge>
              <From>0</From>
              <To>1</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>1</From>
              <To>2</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>2</From>
              <To>4</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>3</From>
              <To>0</To>
              <Label>Source1</Label>
            </Edge>
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="SelectMany">
        <Name>MoviePlayback</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>World</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Pupil</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q7:ModelPredict" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item1</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q1:UpdateTexture">
                <q1:TextureName>Video</q1:TextureName>
                <q1:InternalFormat>Rgba</q1:InternalFormat>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Zip" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Calibration</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Zip" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="CombineLatest" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="WithLatestFrom" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Calibration</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="SkipUntil" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Merge" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Draw</Name>
            </Expression>
            <Expression xsi:type="ExternalizedProperty">
              <MemberName>SizeX</MemberName>
              <Name />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Calibration</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2.Item1</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q5:VideoWriter">
                <q5:FileName>Data\2018-07-24T09_24_36\2018-07-24T09_24_36-world.avi</q5:FileName>
                <q5:Suffix>None</q5:Suffix>
                <q5:Buffered>true</q5:Buffered>
                <q5:Overwrite>false</q5:Overwrite>
                <q5:FourCC>FMP4</q5:FourCC>
                <q5:FrameRate>30</q5:FrameRate>
                <q5:FrameSize>
                  <q5:Width>0</q5:Width>
                  <q5:Height>0</q5:Height>
                </q5:FrameSize>
                <q5:ResizeInterpolation>NearestNeighbor</q5:ResizeInterpolation>
              </Combinator>
            </Expression>
            <Expression xsi:type="q9:CsvWriter">
              <q9:FileName />
              <q9:Delimiter>,</q9:Delimiter>
              <q9:Append>false</q9:Append>
              <q9:Overwrite>false</q9:Overwrite>
              <q9:Suffix>None</q9:Suffix>
              <q9:IncludeHeader>true</q9:IncludeHeader>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2.Item2.Item1.Item3.Image</Selector>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item4</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="ToArray" />
            </Expression>
            <Expression xsi:type="ExternalizedProperty">
              <MemberName>FileName</MemberName>
              <Name />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Calibration</Name>
            </Expression>
            <Expression xsi:type="ExternalizedProperty">
              <MemberName>FileName</MemberName>
              <Name />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Calibration</Name>
            </Expression>
            <Expression xsi:type="Format">
              <Format>Data\{0}\{0}-gaze.csv</Format>
            </Expression>
            <Expression xsi:type="Format">
              <Format>Data\{0}\{0}-world.avi</Format>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Zip" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="PublishSubject">
              <Name>FrameReady</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>FrameReady</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="SkipUntil" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Slice">
                <Start>0</Start>
                <Step>2</Step>
                <Stop xsi:nil="true" />
              </Combinator>
            </Expression>
            <Expression xsi:type="AsyncSubject">
              <Name>Calibration</Name>
            </Expression>
            <Expression xsi:type="q9:CsvWriter">
              <q9:Delimiter>,</q9:Delimiter>
              <q9:Append>false</q9:Append>
              <q9:Overwrite>false</q9:Overwrite>
              <q9:Suffix>None</q9:Suffix>
              <q9:IncludeHeader>true</q9:IncludeHeader>
              <q9:Selector>Item1.Centroid,Item1.MajorAxisLength,Item1.MinorAxisLength,Item1.Area</q9:Selector>
            </Expression>
            <Expression xsi:type="ExternalizedProperty">
              <MemberName>FileName</MemberName>
              <Name />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Calibration</Name>
            </Expression>
            <Expression xsi:type="Format">
              <Format>Data\{0}\{0}-pupil.csv</Format>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item1.Centroid,Item2</Selector>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Frames</Selector>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Frames</Selector>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Model</Selector>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>FileName</Selector>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>FileName</Selector>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>FileName</Selector>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>FileName</Selector>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\DrawSprite">
              <TextureName>Video</TextureName>
              <LocationX>0</LocationX>
              <LocationY>0</LocationY>
              <SizeX>1.33333337</SizeX>
              <SizeY>-1</SizeY>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>FullWidth</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="q1:UpdateFrame" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="q1:AspectRatio" />
                  </Expression>
                  <Expression xsi:type="Multiply">
                    <Operand xsi:type="FloatProperty">
                      <Value>1</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge>
                    <From>0</From>
                    <To>1</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>1</From>
                    <To>2</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>2</From>
                    <To>3</To>
                    <Label>Source1</Label>
                  </Edge>
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>PupilPosition</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2.Item2.Item1.Item1,Item2.Item2.Item2</Selector>
                  </Expression>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge>
                    <From>0</From>
                    <To>2</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>1</From>
                    <To>0</To>
                    <Label>Source1</Label>
                  </Edge>
                </Edges>
              </Workflow>
            </Expression>
          </Nodes>
          <Edges>
            <Edge>
              <From>0</From>
              <To>35</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>1</From>
              <To>34</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>2</From>
              <To>9</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>3</From>
              <To>19</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>4</From>
              <To>5</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>5</From>
              <To>31</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>6</From>
              <To>21</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>7</From>
              <To>41</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>8</From>
              <To>4</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>8</From>
              <To>50</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>8</From>
              <To>17</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>8</From>
              <To>20</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>9</From>
              <To>10</To>
              <Label>Source2</Label>
            </Edge>
            <Edge>
              <From>10</From>
              <To>8</To>
              <Label>Source2</Label>
            </Edge>
            <Edge>
              <From>11</From>
              <To>42</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>12</From>
              <To>10</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>13</From>
              <To>8</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>14</From>
              <To>33</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>15</From>
              <To>48</To>
              <Label>Source2</Label>
            </Edge>
            <Edge>
              <From>16</From>
              <To>43</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>17</From>
              <To>18</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>18</From>
              <To>6</To>
              <Label>Source3</Label>
            </Edge>
            <Edge>
              <From>19</From>
              <To>6</To>
              <Label>Source2</Label>
            </Edge>
            <Edge>
              <From>20</From>
              <To>6</To>
              <Label>Source4</Label>
            </Edge>
            <Edge>
              <From>21</From>
              <To>22</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>22</From>
              <To>29</To>
              <Label>Source2</Label>
            </Edge>
            <Edge>
              <From>23</From>
              <To>19</To>
              <Label>Source2</Label>
            </Edge>
            <Edge>
              <From>24</From>
              <To>44</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>25</From>
              <To>18</To>
              <Label>Source2</Label>
            </Edge>
            <Edge>
              <From>26</From>
              <To>45</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>27</From>
              <To>23</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>28</From>
              <To>25</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>29</From>
              <To>30</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>31</From>
              <To>6</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>32</From>
              <To>33</To>
              <Label>Source2</Label>
            </Edge>
            <Edge>
              <From>33</From>
              <To>48</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>34</From>
              <To>12</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>35</From>
              <To>47</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>36</From>
              <To>40</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>37</From>
              <To>36</To>
              <Label>Source2</Label>
            </Edge>
            <Edge>
              <From>38</From>
              <To>46</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>39</From>
              <To>37</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>40</From>
              <To>3</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>41</From>
              <To>13</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>42</From>
              <To>12</To>
              <Label>Source2</Label>
            </Edge>
            <Edge>
              <From>43</From>
              <To>9</To>
              <Label>Source2</Label>
            </Edge>
            <Edge>
              <From>44</From>
              <To>27</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>45</From>
              <To>28</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>46</From>
              <To>39</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>47</From>
              <To>29</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>49</From>
              <To>15</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>50</From>
              <To>36</To>
              <Label>Source1</Label>
            </Edge>
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="SelectMany">
        <Name>PupilCalibration</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>Pupil</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2,Item3.Image</Selector>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Draw</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="TakeUntil" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q6:MouseDown" />
            </Expression>
            <Expression xsi:type="ExternalizedProperty">
              <MemberName>SizeX</MemberName>
              <Name />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>World</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="WithLatestFrom" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q1:UpdateTexture">
                <q1:TextureName>Video</q1:TextureName>
                <q1:InternalFormat>Rgba</q1:InternalFormat>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q8:Concat">
                <q8:Axis>1</q8:Axis>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q5:ConvertColor">
                <q5:Conversion>Gray2Bgr</q5:Conversion>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q5:Resize">
                <q5:Size>
                  <q5:Width>320</q5:Width>
                  <q5:Height>240</q5:Height>
                </q5:Size>
                <q5:Interpolation>Linear</q5:Interpolation>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="SkipUntil" />
            </Expression>
            <Expression xsi:type="PublishSubject">
              <Name>FrameReady</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>FrameReady</Name>
            </Expression>
            <Expression xsi:type="Add" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="LastOrDefault" />
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\DrawSprite">
              <TextureName>Video</TextureName>
              <LocationX>0</LocationX>
              <LocationY>0</LocationY>
              <SizeX>1.33333337</SizeX>
              <SizeY>-1</SizeY>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>FullWidth</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="q1:UpdateFrame" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="q1:AspectRatio" />
                  </Expression>
                  <Expression xsi:type="Multiply">
                    <Operand xsi:type="FloatProperty">
                      <Value>1</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge>
                    <From>0</From>
                    <To>1</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>1</From>
                    <To>2</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>2</From>
                    <To>3</To>
                    <Label>Source1</Label>
                  </Edge>
                </Edges>
              </Workflow>
            </Expression>
          </Nodes>
          <Edges>
            <Edge>
              <From>0</From>
              <To>1</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>1</From>
              <To>16</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>2</From>
              <To>13</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>4</From>
              <To>17</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>5</From>
              <To>4</To>
              <Label>Source2</Label>
            </Edge>
            <Edge>
              <From>6</From>
              <To>18</To>
              <Label>Source2</Label>
            </Edge>
            <Edge>
              <From>7</From>
              <To>8</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>8</From>
              <To>10</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>9</From>
              <To>14</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>10</From>
              <To>9</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>11</From>
              <To>12</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>12</From>
              <To>8</To>
              <Label>Source2</Label>
            </Edge>
            <Edge>
              <From>13</From>
              <To>18</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>15</From>
              <To>13</To>
              <Label>Source2</Label>
            </Edge>
            <Edge>
              <From>16</From>
              <To>11</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>17</From>
              <To>3</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>18</From>
              <To>4</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>19</From>
              <To>6</To>
              <Label>Source1</Label>
            </Edge>
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="SelectMany">
        <Name>Replay</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="AsyncSubject">
              <Name>Input</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q5:FileCapture">
                <q5:FileName>Data\2018-07-24T09_24_36\2018-07-24T09_24_36-world.avi</q5:FileName>
                <q5:PlaybackRate>0</q5:PlaybackRate>
                <q5:StartPosition>0</q5:StartPosition>
                <q5:PositionUnits>Frames</q5:PositionUnits>
                <q5:Loop>false</q5:Loop>
                <q5:Playing>true</q5:Playing>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Merge" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Zip" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q8:Concat">
                <q8:Axis>1</q8:Axis>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q1:UpdateTexture">
                <q1:TextureName>Video</q1:TextureName>
                <q1:InternalFormat>Rgba</q1:InternalFormat>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Draw</Name>
            </Expression>
            <Expression xsi:type="ExternalizedProperty">
              <MemberName>SizeX</MemberName>
              <Name />
            </Expression>
            <Expression xsi:type="ExternalizedProperty">
              <MemberName>FileName</MemberName>
              <Name />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item1</Selector>
            </Expression>
            <Expression xsi:type="Format">
              <Format>Data\{0}\{0}-world.avi</Format>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Input</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Input</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q5:ConvertColor">
                <q5:Conversion>Gray2Bgr</q5:Conversion>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q5:Resize">
                <q5:Size>
                  <q5:Width>320</q5:Width>
                  <q5:Height>240</q5:Height>
                </q5:Size>
                <q5:Interpolation>Linear</q5:Interpolation>
              </Combinator>
            </Expression>
            <Expression xsi:type="PublishSubject">
              <Name>FrameReady</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="SkipUntil" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>FrameReady</Name>
            </Expression>
            <Expression xsi:type="q9:CsvReader">
              <q9:FileName>Data\2018-07-24T09_24_36\2018-07-24T09_24_36-pupil.csv</q9:FileName>
              <q9:Delimiter />
              <q9:ScanPattern>%f,%f</q9:ScanPattern>
              <q9:SkipRows>1</q9:SkipRows>
            </Expression>
            <Expression xsi:type="ExternalizedProperty">
              <MemberName>FileName</MemberName>
              <Name />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item1</Selector>
            </Expression>
            <Expression xsi:type="Format">
              <Format>Data\{0}\{0}-gaze.csv</Format>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Input</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Zip" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q7:DrawGazeTarget">
                <q7:Radius>3</q7:Radius>
                <q7:Thickness>2</q7:Thickness>
              </Combinator>
            </Expression>
            <Expression xsi:type="InputMapping">
              <PropertyMappings>
                <Property name="X" selector="Item1" />
                <Property name="Y" selector="Item2" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q5:CreatePoint2f">
                <q5:X>128.869</q5:X>
                <q5:Y>122.3235</q5:Y>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Last" />
            </Expression>
            <Expression xsi:type="q9:CsvReader">
              <q9:FileName>Data\2018-07-24T09_24_36\2018-07-24T09_24_36-pupil.csv</q9:FileName>
              <q9:Delimiter />
              <q9:ScanPattern>%f,%f,%f,%f,%f</q9:ScanPattern>
              <q9:SkipRows>1</q9:SkipRows>
            </Expression>
            <Expression xsi:type="ExternalizedProperty">
              <MemberName>FileName</MemberName>
              <Name />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item1</Selector>
            </Expression>
            <Expression xsi:type="Format">
              <Format>Data\{0}\{0}-pupil.csv</Format>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Input</Name>
            </Expression>
            <Expression xsi:type="InputMapping">
              <PropertyMappings>
                <Property name="X" selector="Item1" />
                <Property name="Y" selector="Item2" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q5:CreatePoint2f">
                <q5:X>128.869</q5:X>
                <q5:Y>122.3235</q5:Y>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Zip" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q7:DrawGazeTarget">
                <q7:Radius>3</q7:Radius>
                <q7:Thickness>-1</q7:Thickness>
              </Combinator>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\DrawSprite">
              <TextureName>Video</TextureName>
              <LocationX>0</LocationX>
              <LocationY>0</LocationY>
              <SizeX>1.33333337</SizeX>
              <SizeY>-1</SizeY>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>FullWidth</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="q1:UpdateFrame" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="q1:AspectRatio" />
                  </Expression>
                  <Expression xsi:type="Multiply">
                    <Operand xsi:type="FloatProperty">
                      <Value>1</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge>
                    <From>0</From>
                    <To>1</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>1</From>
                    <To>2</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>2</From>
                    <To>3</To>
                    <Label>Source1</Label>
                  </Edge>
                </Edges>
              </Workflow>
            </Expression>
          </Nodes>
          <Edges>
            <Edge>
              <From>0</From>
              <To>1</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>3</From>
              <To>5</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>4</From>
              <To>16</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>5</From>
              <To>27</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>6</From>
              <To>7</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>7</From>
              <To>18</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>8</From>
              <To>19</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>9</From>
              <To>40</To>
              <Label>Source2</Label>
            </Edge>
            <Edge>
              <From>10</From>
              <To>3</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>11</From>
              <To>4</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>12</From>
              <To>13</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>13</From>
              <To>10</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>14</From>
              <To>12</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>15</From>
              <To>11</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>16</From>
              <To>38</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>17</From>
              <To>26</To>
              <Label>Source2</Label>
            </Edge>
            <Edge>
              <From>18</From>
              <To>30</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>19</From>
              <To>40</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>20</From>
              <To>19</To>
              <Label>Source2</Label>
            </Edge>
            <Edge>
              <From>21</From>
              <To>28</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>22</From>
              <To>21</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>23</From>
              <To>24</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>24</From>
              <To>22</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>25</From>
              <To>23</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>26</From>
              <To>6</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>27</From>
              <To>26</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>28</From>
              <To>29</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>29</From>
              <To>5</To>
              <Label>Source2</Label>
            </Edge>
            <Edge>
              <From>30</From>
              <To>2</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>31</From>
              <To>36</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>32</From>
              <To>31</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>33</From>
              <To>34</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>34</From>
              <To>32</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>35</From>
              <To>33</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>36</From>
              <To>37</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>37</From>
              <To>38</To>
              <Label>Source2</Label>
            </Edge>
            <Edge>
              <From>38</From>
              <To>39</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>39</From>
              <To>17</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>41</From>
              <To>9</To>
              <Label>Source1</Label>
            </Edge>
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="SelectMany">
        <Name>EndScreen</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>Draw</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="TakeUntil" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Last" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="ExternalizedProperty">
              <MemberName>TextureName</MemberName>
              <Name>TextureName</Name>
            </Expression>
            <Expression xsi:type="ExternalizedProperty">
              <MemberName>SizeX</MemberName>
              <Name />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Timer">
                <DueTime>PT3S</DueTime>
                <Period>PT0S</Period>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedProperty">
              <MemberName>DueTime</MemberName>
              <Name>DueTime</Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\DrawSprite">
              <TextureName>End</TextureName>
              <LocationX>0</LocationX>
              <LocationY>0</LocationY>
              <SizeX>1.33333337</SizeX>
              <SizeY>1</SizeY>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>FullWidth</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="q1:UpdateFrame" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="q1:AspectRatio" />
                  </Expression>
                  <Expression xsi:type="Multiply">
                    <Operand xsi:type="FloatProperty">
                      <Value>1</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge>
                    <From>0</From>
                    <To>1</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>1</From>
                    <To>2</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>2</From>
                    <To>3</To>
                    <Label>Source1</Label>
                  </Edge>
                </Edges>
              </Workflow>
            </Expression>
          </Nodes>
          <Edges>
            <Edge>
              <From>0</From>
              <To>8</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>1</From>
              <To>2</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>2</From>
              <To>3</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>4</From>
              <To>8</To>
              <Label>Source2</Label>
            </Edge>
            <Edge>
              <From>5</From>
              <To>8</To>
              <Label>Source3</Label>
            </Edge>
            <Edge>
              <From>6</From>
              <To>1</To>
              <Label>Source2</Label>
            </Edge>
            <Edge>
              <From>7</From>
              <To>6</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>8</From>
              <To>1</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>9</From>
              <To>5</To>
              <Label>Source1</Label>
            </Edge>
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Scan">
        <Name>AdjustThreshold</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="MemberSelector">
              <Selector>Value</Selector>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Accumulation</Selector>
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="WorkflowPropertyOfKey">
                <Value>Left</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="WorkflowPropertyOfKey">
                <Value>Right</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>-1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Merge" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Zip" />
            </Expression>
            <Expression xsi:type="Add" />
            <Expression xsi:type="q10:ExpressionTransform">
              <q10:Expression>Math.Max(0,Math.Min(it, 50))</q10:Expression>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>EventArgs.Key</Selector>
            </Expression>
            <Expression xsi:type="Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge>
                    <From>0</From>
                    <To>1</To>
                    <Label>Source1</Label>
                  </Edge>
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge>
                    <From>0</From>
                    <To>1</To>
                    <Label>Source1</Label>
                  </Edge>
                </Edges>
              </Workflow>
            </Expression>
          </Nodes>
          <Edges>
            <Edge>
              <From>0</From>
              <To>2</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>0</From>
              <To>3</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>2</From>
              <To>13</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>3</From>
              <To>10</To>
              <Label>Source2</Label>
            </Edge>
            <Edge>
              <From>4</From>
              <To>14</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>5</From>
              <To>15</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>6</From>
              <To>8</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>7</From>
              <To>8</To>
              <Label>Source2</Label>
            </Edge>
            <Edge>
              <From>8</From>
              <To>10</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>9</From>
              <To>8</To>
              <Label>Source3</Label>
            </Edge>
            <Edge>
              <From>10</From>
              <To>11</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>11</From>
              <To>12</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>12</From>
              <To>1</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>13</From>
              <To>4</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>13</From>
              <To>5</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>13</From>
              <To>9</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>14</From>
              <To>6</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>15</From>
              <To>7</To>
              <Label>Source1</Label>
            </Edge>
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges>
      <Edge>
        <From>0</From>
        <To>19</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>1</From>
        <To>4</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>3</From>
        <To>5</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>4</From>
        <To>2</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>6</From>
        <To>12</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>7</From>
        <To>8</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>7</From>
        <To>10</To>
        <Label>Source3</Label>
      </Edge>
      <Edge>
        <From>8</From>
        <To>14</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>10</From>
        <To>9</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>12</From>
        <To>13</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>13</From>
        <To>11</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>14</From>
        <To>22</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>14</From>
        <To>10</To>
        <Label>Source2</Label>
      </Edge>
      <Edge>
        <From>16</From>
        <To>27</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>17</From>
        <To>27</To>
        <Label>Source2</Label>
      </Edge>
      <Edge>
        <From>18</From>
        <To>14</To>
        <Label>Source2</Label>
      </Edge>
      <Edge>
        <From>19</From>
        <To>3</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>20</From>
        <To>24</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>21</From>
        <To>23</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>22</From>
        <To>10</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>23</From>
        <To>25</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>24</From>
        <To>21</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>25</From>
        <To>26</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>26</From>
        <To>15</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>27</From>
        <To>18</To>
        <Label>Source1</Label>
      </Edge>
    </Edges>
  </Workflow>
  <ExtensionTypes>
    <Type>Bonsai.Shaders.RenderFrame, Bonsai.Shaders, Version=0.19.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Numerics.CreateRandom, Bonsai.Numerics, Version=0.1.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.AsyncSubjectBuilder, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Numerics.Distributions.CreateContinuousUniform, Bonsai.Numerics, Version=0.1.0.0, Culture=neutral, PublicKeyToken=null</Type>
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  </ExtensionTypes>
</WorkflowBuilder>